experiment_profile_name: Exp_chemostat_custom
metadata:
  author: ML
  description: Dosing profile
pioreactors:
  pio01:
    jobs:
      add_media:
        actions:
        - type: start
          t: 2.554162047306696
          options:
            ml: 0.5
        - type: start
          t: 3.6885769444289425
          options:
            ml: 0.5
        - type: start
          t: 4.822991841551189
          options:
            ml: 0.5
        - type: start
          t: 5.957406738673435
          options:
            ml: 0.5
        - type: start
          t: 7.091821635795681
          options:
            ml: 0.5
        - type: start
          t: 8.226236532917927
          options:
            ml: 0.5
        - type: start
          t: 9.360651430040175
          options:
            ml: 0.5
        - type: start
          t: 10.49506632716242
          options:
            ml: 0.5
        - type: start
          t: 11.629481224284667
          options:
            ml: 0.5
        - type: start
          t: 12.763896121406912
          options:
            ml: 0.5
        - type: start
          t: 13.89831101852916
          options:
            ml: 0.5
        - type: start
          t: 15.032725915651405
          options:
            ml: 0.5
        - type: start
          t: 16.167140812773653
          options:
            ml: 0.5
        - type: start
          t: 17.3015557098959
          options:
            ml: 0.5
        - type: start
          t: 18.435970607018145
          options:
            ml: 0.5
        - type: start
          t: 19.57038550414039
          options:
            ml: 0.5
        - type: start
          t: 20.704800401262638
          options:
            ml: 0.5
      remove_waste:
        actions:
        - type: start
          t: 2.5571620473066963
          options:
            ml: 1.0
        - type: start
          t: 3.6915769444289426
          options:
            ml: 1.0
        - type: start
          t: 4.825991841551189
          options:
            ml: 1.0
        - type: start
          t: 5.960406738673435
          options:
            ml: 1.0
        - type: start
          t: 7.0948216357956815
          options:
            ml: 1.0
        - type: start
          t: 8.229236532917927
          options:
            ml: 1.0
        - type: start
          t: 9.363651430040175
          options:
            ml: 1.0
        - type: start
          t: 10.49806632716242
          options:
            ml: 1.0
        - type: start
          t: 11.632481224284668
          options:
            ml: 1.0
        - type: start
          t: 12.766896121406912
          options:
            ml: 1.0
        - type: start
          t: 13.90131101852916
          options:
            ml: 1.0
        - type: start
          t: 15.035725915651405
          options:
            ml: 1.0
        - type: start
          t: 16.170140812773653
          options:
            ml: 1.0
        - type: start
          t: 17.3045557098959
          options:
            ml: 1.0
        - type: start
          t: 18.438970607018145
          options:
            ml: 1.0
        - type: start
          t: 19.57338550414039
          options:
            ml: 1.0
        - type: start
          t: 20.707800401262638
          options:
            ml: 1.0
  worker01:
    jobs:
      add_media:
        actions:
        - type: start
          t: 2.554162047306696
          options:
            ml: 0.5
        - type: start
          t: 3.7028785152628725
          options:
            ml: 0.5
        - type: start
          t: 4.851594983219049
          options:
            ml: 0.5
        - type: start
          t: 6.000311451175224
          options:
            ml: 0.5
        - type: start
          t: 7.1490279191314015
          options:
            ml: 0.5
        - type: start
          t: 8.29774438708758
          options:
            ml: 0.5
        - type: start
          t: 9.446460855043753
          options:
            ml: 0.5
        - type: start
          t: 10.59517732299993
          options:
            ml: 0.5
        - type: start
          t: 11.743893790956108
          options:
            ml: 0.5
        - type: start
          t: 12.892610258912285
          options:
            ml: 0.5
        - type: start
          t: 14.041326726868462
          options:
            ml: 0.5
        - type: start
          t: 15.190043194824636
          options:
            ml: 0.5
        - type: start
          t: 16.338759662780813
          options:
            ml: 0.5
        - type: start
          t: 17.48747613073699
          options:
            ml: 0.5
        - type: start
          t: 18.636192598693164
          options:
            ml: 0.5
        - type: start
          t: 19.78490906664934
          options:
            ml: 0.5
        - type: start
          t: 20.93362553460552
          options:
            ml: 0.5
      remove_waste:
        actions:
        - type: start
          t: 2.5571620473066963
          options:
            ml: 1.0
        - type: start
          t: 3.7058785152628726
          options:
            ml: 1.0
        - type: start
          t: 4.854594983219049
          options:
            ml: 1.0
        - type: start
          t: 6.003311451175224
          options:
            ml: 1.0
        - type: start
          t: 7.152027919131402
          options:
            ml: 1.0
        - type: start
          t: 8.30074438708758
          options:
            ml: 1.0
        - type: start
          t: 9.449460855043753
          options:
            ml: 1.0
        - type: start
          t: 10.59817732299993
          options:
            ml: 1.0
        - type: start
          t: 11.746893790956108
          options:
            ml: 1.0
        - type: start
          t: 12.895610258912285
          options:
            ml: 1.0
        - type: start
          t: 14.044326726868462
          options:
            ml: 1.0
        - type: start
          t: 15.193043194824636
          options:
            ml: 1.0
        - type: start
          t: 16.341759662780813
          options:
            ml: 1.0
        - type: start
          t: 17.49047613073699
          options:
            ml: 1.0
        - type: start
          t: 18.639192598693164
          options:
            ml: 1.0
        - type: start
          t: 19.78790906664934
          options:
            ml: 1.0
        - type: start
          t: 20.93662553460552
          options:
            ml: 1.0
