experiment_profile_name: Exp_emulator
metadata:
  author: fede
  description: >
    Initial dosing profile for accelerated mode (acceleration != 1).
    Times t are in simulation hours relative to the moment the emulator
    reads the file; it is re-anchored only when this file changes.
pioreactors:
  pio01:
    jobs:
      add_media:
        actions:
        - type: start
          t: 5.0
          options:
            ml: 0.5
        - type: start
          t: 6.0
          options:
            ml: 0.5
        - type: start
          t: 7.0
          options:
            ml: 0.5
        - type: start
          t: 8.0
          options:
            ml: 0.5
        - type: start
          t: 9.0
          options:
            ml: 0.5
        - type: start
          t: 10.0
          options:
            ml: 0.5
        - type: start
          t: 11.0
          options:
            ml: 0.5
        - type: start
          t: 12.0
          options:
            ml: 0.5
        - type: start
          t: 13.0
          options:
            ml: 0.5
        - type: start
          t: 14.0
          options:
            ml: 0.5
      remove_waste:
        actions:
        - type: start
          t: 5.003
          options:
            ml: 1.0
        - type: start
          t: 6.003
          options:
            ml: 1.0
        - type: start
          t: 7.003
          options:
            ml: 1.0
        - type: start
          t: 8.003
          options:
            ml: 1.0
        - type: start
          t: 9.003
          options:
            ml: 1.0
        - type: start
          t: 10.003
          options:
            ml: 1.0
        - type: start
          t: 11.003
          options:
            ml: 1.0
        - type: start
          t: 12.003
          options:
            ml: 1.0
        - type: start
          t: 13.003
          options:
            ml: 1.0
        - type: start
          t: 14.003
          options:
            ml: 1.0
  worker01:
    jobs:
      add_media:
        actions:
        - type: start
          t: 5.0
          options:
            ml: 0.5
        - type: start
          t: 6.0
          options:
            ml: 0.5
        - type: start
          t: 7.0
          options:
            ml: 0.5
        - type: start
          t: 8.0
          options:
            ml: 0.5
        - type: start
          t: 9.0
          options:
            ml: 0.5
        - type: start
          t: 10.0
          options:
            ml: 0.5
        - type: start
          t: 11.0
          options:
            ml: 0.5
        - type: start
          t: 12.0
          options:
            ml: 0.5
        - type: start
          t: 13.0
          options:
            ml: 0.5
        - type: start
          t: 14.0
          options:
            ml: 0.5
      remove_waste:
        actions:
        - type: start
          t: 5.003
          options:
            ml: 1.0
        - type: start
          t: 6.003
          options:
            ml: 1.0
        - type: start
          t: 7.003
          options:
            ml: 1.0
        - type: start
          t: 8.003
          options:
            ml: 1.0
        - type: start
          t: 9.003
          options:
            ml: 1.0
        - type: start
          t: 10.003
          options:
            ml: 1.0
        - type: start
          t: 11.003
          options:
            ml: 1.0
        - type: start
          t: 12.003
          options:
            ml: 1.0
        - type: start
          t: 13.003
          options:
            ml: 1.0
        - type: start
          t: 14.003
          options:
            ml: 1.0
